PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Completed URL = https://regensburg.sona-systems.com/webstudy_credit.aspx?experiment_id=1093&credit_token=3ab017d6ceb04173ba128bd636423369&survey_code=" + expInfo[‘participant’]
  Data filename = u'data/%s_%s_%s' % (expInfo['ID-Nummer'], expName, expInfo['date'])
  Experiment info = {'ID-Nummer': 'f"{randint(0, 999999):06.0f}"', 'Alter': '', 'Geschlecht (optional)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = guess
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Willkommen zum Ratespiel Experiment!
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    CodeComponent experiment_setup
      Code Type = Both
      Begin Experiment:
        # import random for letter randomization
        import random as rnd
      Begin JS Experiment:
        //Hide mouse
        document.body.style.cursor='none';
      End JS Experiment:
        document.body.style.cursor='auto';
  Routine load_iti
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  Routine instructions_semantic_mapping1
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    TextComponent sm_instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Im letzten Teil des Experiments wird Ihnen eine Liste von Wörtern jeweils einzeln auf dem Bildschirm präsentiert. Sie müssen entscheiden, ob das Wort etwas Lebendiges oder Nicht-Lebendiges bezeichnet.

        Drücken Sie die LEERTASTE, um fortzufahren.
    KeyboardComponent sm_instructions1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_semantic_mapping2
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    TextComponent sm_instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Bei manchen Wörtern ist es schwieriger, diese Entscheidung zu treffen als bei anderen. Es gibt nicht immer eine richtige oder falsche Antwort. Verlassen Sie sich auf Ihre Intuition, die Entscheidung liegt bei Ihnen!

        Geben Sie Ihre Antwort mit den Tasten F / G an.

        Drücken Sie die LEERTASTE, um die Aufgabe zu starten.
    KeyboardComponent sm_instructions2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine item
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    TextComponent semantic_map_item
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $list_item
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    KeyboardComponent living_nonliving
      allowedKeys = 'f','g'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent end_mapping
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent living_nonliving_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = F) Lebendig        G) Nicht lebendig
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    CodeComponent save_sm_trial_type
      Code Type = Auto->JS
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      Begin Routine:
        if list_item in target_types:
            thisExp.addData('sm_trial_type', target_types[list_item])
            thisExp.addData('trial_type', target_types[list_item])
        else:
            thisExp.addData('sm_trial_type', "Mediator")
            thisExp.addData('trial_type', cue_types[cue])
  Routine start_task
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    TextComponent start_task_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Jetzt beginnt die Aufgabe. Sie erhalten keine Rückmeldungen mehr.

        Drücken Sie die LEERTASTE, wenn Sie bereit sind zu starten.
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent reset_trial_counter
      Code Type = Auto->JS
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      Begin Routine:
        task_trial = 0
  Routine mapping_break
    RoutineSettingsComponent mapping_break
      skipIf = mapping_trial < 60
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    TextComponent break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Pause. Drücken Sie die LEERTASTE, um fortzufahren.
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    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent reset_counter
      Code Type = Auto->JS
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      Begin Experiment:
        mapping_trial = 0
      Begin Routine:
        mapping_trial = mapping_trial + 1
        print("mapping_trial", mapping_trial)
      End Routine:
        if mapping_trial == 60:
            mapping_trial = 0

        print('break', mapping_trial)
  Routine thanks
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    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Das ist das Ende des Experiments.

        Vielen Dank!
  Routine task_break
    RoutineSettingsComponent task_break
      skipIf = task_trial < 40
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    TextComponent task_break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Pause. Drücken Sie die LEERTASTE, um fortzufahren.
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    KeyboardComponent task_break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent task_reset_counter
      Code Type = Auto->JS
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      Begin Routine:
        task_trial = task_trial + 1
      End Routine:
        if task_trial == 40:
            task_trial = 0

        print('break', task_trial)
  Routine iti
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    TextComponent iti_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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Flow
  Routine welcome
  LoopInitiator sm_itis loopType="TrialHandler"
    conditionsFile = guess_trial_randomization.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'guess_trial': 'Read', 'randomizer': 0.5151330900735425},
      {'guess_trial': 'Guess', 'randomizer': 0.9521622061185603},
      {'guess_trial': 'Read', 'randomizer': 0.023475980425411325},
      {'guess_trial': 'Guess', 'randomizer': 0.25635452180506624},
      {'guess_trial': 'Read', 'randomizer': 0.6404020411274577},
      {'guess_trial': 'Guess', 'randomizer': 0.018734469646123464},
      {'guess_trial': 'Read', 'randomizer': 0.7772015690443097},
      {'guess_trial': 'Guess', 'randomizer': 0.6447920965299975},
      {'guess_trial': 'Read', 'randomizer': 0.19628716470246532},
      {'guess_trial': 'Guess', 'randomizer': 0.48150969693089274},
      {'guess_trial': 'Read', 'randomizer': 0.613164444188032},
      {'guess_trial': 'Guess', 'randomizer': 0.805573121826868},
      {'guess_trial': 'Read', 'randomizer': 0.24480295044966605},
      {'guess_trial': 'Guess', 'randomizer': 0.5482373304984292},
      {'guess_trial': 'Read', 'randomizer': 0.11848935647538872},
      {'guess_trial': 'Guess', 'randomizer': 0.07594749442308124},
      {'guess_trial': 'Read', 'randomizer': 0.8122070180757547},
      {'guess_trial': 'Guess', 'randomizer': 0.10443709664628964},
      {'guess_trial': 'Read', 'randomizer': 0.6778095400312084},
      {'guess_trial': 'Guess', 'randomizer': 0.09659581772781523},
      {'guess_trial': 'Read', 'randomizer': 0.853624920285945},
      {'guess_trial': 'Guess', 'randomizer': 0.3875191100267211},
      {'guess_trial': 'Read', 'randomizer': 0.4835191409713012},
      {'guess_trial': 'Guess', 'randomizer': 0.7814405219103098},
      {'guess_trial': 'Read', 'randomizer': 0.036047544470137693}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
    Routine load_iti
  LoopTerminator sm_itis
  Routine instructions_semantic_mapping1
  Routine instructions_semantic_mapping2
  LoopInitiator semantic_mapping loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = targets_mediators.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'Akrobatin', 'list_item': 'Seil', 'kind': 'target'},
      {'cue': 'Chips', 'list_item': 'Salz', 'kind': 'target'},
      {'cue': 'Definition', 'list_item': 'Begriff', 'kind': 'target'},
      {'cue': 'Experiment', 'list_item': 'Versuch', 'kind': 'target'},
      {'cue': 'Fakt', 'list_item': 'Wissen', 'kind': 'target'},
      {'cue': 'Leistung', 'list_item': 'Ehre', 'kind': 'target'},
      {'cue': 'Rauch', 'list_item': 'Nebel', 'kind': 'target'},
      {'cue': 'Scheidung', 'list_item': 'Anwalt', 'kind': 'target'},
      {'cue': 'Service', 'list_item': 'Kunde', 'kind': 'target'},
      {'cue': 'Shampoo', 'list_item': 'Seife', 'kind': 'target'},
      {'cue': 'Soldat', 'list_item': 'Kämpfer', 'kind': 'target'},
      {'cue': 'Zeichnung', 'list_item': 'Bleistift', 'kind': 'target'},
      {'cue': 'Anführer', 'list_item': 'Boss', 'kind': 'target'},
      {'cue': 'Beutel', 'list_item': 'Sack', 'kind': 'target'},
      {'cue': 'Gast', 'list_item': 'Zimmer', 'kind': 'target'},
      {'cue': 'Geburtstag', 'list_item': 'Kerze', 'kind': 'target'},
      {'cue': 'Geschwister', 'list_item': 'Eltern', 'kind': 'target'},
      {'cue': 'Golf', 'list_item': 'Loch', 'kind': 'target'},
      {'cue': 'Küche', 'list_item': 'Tisch', 'kind': 'target'},
      {'cue': 'Rasen', 'list_item': 'Pflege', 'kind': 'target'},
      {'cue': 'Safari', 'list_item': 'Ausflug', 'kind': 'target'},
      {'cue': 'Sitzgurt', 'list_item': 'Gesetz', 'kind': 'target'},
      {'cue': 'Vampir', 'list_item': 'Geist', 'kind': 'target'},
      {'cue': 'Vergangenheit', 'list_item': 'Erinnerungen', 'kind': 'target'},
      {'cue': 'Agent', 'list_item': 'Reise', 'kind': 'target'}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
    Routine iti
    Routine item
    Routine mapping_break
  LoopTerminator semantic_mapping
  Routine thanks
